// APEX CONNECTS, DTI FA (moving) onto PS-OCT retardance (fixed), 0.4 mm pair after the stage-1 affine.
// B-spline, IMPACT Anatomix (L2, Static, 1.6/0.8/0.4/0.4 mm; image axes multiples of 64 voxels) weight 1 + Mattes MI weight 1 + bending 100, grid 2 mm, 500 it/level.

(MaximumNumberOfIterations 500 500 500 500)
(NumberOfSpatialSamples 8192)
(Transform "RecursiveBSplineTransform")
(NumberOfResolutions 4)
(FinalGridSpacingInPhysicalUnits 2.0)
(FixedImagePyramid "FixedGenericImagePyramid")
(MovingImagePyramid "MovingGenericImagePyramid")
(FixedImagePyramidRescaleSchedule 1 1 1 1 1 1 1 1 1 1 1 1)
(MovingImagePyramidRescaleSchedule 1 1 1 1 1 1 1 1 1 1 1 1)


(ImpactModelsPath0 "Anatomix/Anatomix.pt")
(ImpactDimension0 3)
(ImpactNumberOfChannels0 1)
(ImpactPatchSize0 0 0 0)
(ImpactVoxelSize0 1.6 1.6 1.6)
(ImpactLayersMask0 "1")
(ImpactSubsetFeatures0 16)
(ImpactPCA0 0)
(ImpactDistance0 "L2")
(ImpactLayersWeight0 1)

(ImpactModelsPath1 "Anatomix/Anatomix.pt")
(ImpactDimension1 3)
(ImpactNumberOfChannels1 1)
(ImpactPatchSize1 0 0 0)
(ImpactVoxelSize1 0.8 0.8 0.8)
(ImpactLayersMask1 "1")
(ImpactSubsetFeatures1 16)
(ImpactPCA1 0)
(ImpactDistance1 "L2")
(ImpactLayersWeight1 1)

(ImpactModelsPath2 "Anatomix/Anatomix.pt")
(ImpactDimension2 3)
(ImpactNumberOfChannels2 1)
(ImpactPatchSize2 0 0 0)
(ImpactVoxelSize2 0.4 0.4 0.4)
(ImpactLayersMask2 "1")
(ImpactSubsetFeatures2 16)
(ImpactPCA2 0)
(ImpactDistance2 "L2")
(ImpactLayersWeight2 1)

(ImpactModelsPath3 "Anatomix/Anatomix.pt")
(ImpactDimension3 3)
(ImpactNumberOfChannels3 1)
(ImpactPatchSize3 0 0 0)
(ImpactVoxelSize3 0.4 0.4 0.4)
(ImpactLayersMask3 "1")
(ImpactSubsetFeatures3 16)
(ImpactPCA3 0)
(ImpactDistance3 "L2")
(ImpactLayersWeight3 1)

(ImpactUseMixedPrecision "false")
(ImpactFeaturesMapUpdateInterval -1)
(ImpactWriteFeatureMaps "false")
(ImpactMode "Static")
(ImpactGPU 0)


(Metric "Impact" "AdvancedMattesMutualInformation" "TransformBendingEnergyPenalty")
(Metric0Weight 1)
(Metric1Weight 1)
(Metric2Weight 100)

// imageTypes
(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")
(UseDirectionCosines "true")

// components
(Registration "MultiMetricMultiResolutionRegistration")
(BSplineTransformSplineOrder 3)
(UseCyclicTransform "false")

// transform
(AutomaticTransformInitialization "false")
(AutomaticTransformInitializationMethod "GeometricalCenter")
(AutomaticScalesEstimation "true")
(HowToCombineTransforms "Compose")


// optimizer
(Optimizer "AdaptiveStochasticGradientDescent")
(MaximumNumberOfSamplingAttempts 8)
(UseAdaptiveStepSizes "true")
(UseMultiThreadingForMetrics "true")
(ASGDParameterEstimationMethod "DisplacementDistribution")
//(MaximumStepLength 0.6602)
(SigmoidInitialTime 0.0)
(NoiseCompensation "true")
(NumberOfSamplesForExactGradient 4096)

// automatic
(AutomaticParameterEstimation "true")
//(SP_alpha 1)
//(SP_A 20.0)
//(SP a 400)
//(SigmoidMax 1.0)
//(SigmoidMin -0.8)
//(SigmoidScale 0.00000001)
//(NumberOfGradientMeasurements 10)
//(NumberOfJacobianMeasurements 1000)

(FixedKernelBSplineOrder 3)
(MovingKernelBSplineOrder 3)
(CheckNumberOfSamples "false")
(RequiredRatioOfValidSamples 0.05)
(UseRelativeWeights "false")


// several
(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
(ShowExactMetricValue "false")
(ErodeFixedMask "false")
(ErodeMovingMask "false")
(UseBinaryFormatForTransformationParameters "false")

// imageSampler
(Interpolator "BSplineInterpolator")
(ImageSampler "RandomCoordinate")
(NewSamplesEveryIteration "true")
(UseRandomSampleRegion "false")


// interpolator and resampler
(ResampleInterpolator "FinalBSplineInterpolator")
(FinalBSplineInterpolationOrder 3)
(BSplineInterpolationOrder 3)
(Resampler "DefaultResampler")
(WriteIterationInfo "false")
(WriteResultImage "false")
(DefaultPixelValue 0)
(ResultImageFormat "mha")

(ITKTransformOutputFileNameExtension "itk.txt")
(WriteITKCompositeTransform "true")
