// OCT / light-sheet section, light-sheet (moving) onto OCT (fixed): B-spline driven by 2-D MIND R2D2 features
// plus mutual information and a bending penalty, locked to the plane (1000 mm of control-point spacing in z).
// Static mode on a 2-D model: three voxel sizes per model (the image dimension), two patch sizes (the model dimension).

(MaximumNumberOfIterations 800 800 800 800)
(NumberOfSpatialSamples 16384)
(Transform "RecursiveBSplineTransform")
(NumberOfResolutions 4)
(FinalGridSpacingInPhysicalUnits 0.4 0.4 1000)
(FixedImagePyramid "FixedGenericImagePyramid")
(MovingImagePyramid "MovingGenericImagePyramid")
(FixedImagePyramidRescaleSchedule 1 1 1 1 1 1 1 1 1 1 1 1)
(MovingImagePyramidRescaleSchedule 1 1 1 1 1 1 1 1 1 1 1 1)


(ImpactModelsPath0 "MIND/R2D2_2D.pt")
(ImpactDimension0 2)
(ImpactNumberOfChannels0 1)
(ImpactPatchSize0 0 0)
(ImpactVoxelSize0 0.2 0.2 0.4)
(ImpactLayersMask0 "1")
(ImpactSubsetFeatures0 32)
(ImpactPCA0 0)
(ImpactDistance0 "L1")
(ImpactLayersWeight0 1)

(ImpactModelsPath1 "MIND/R2D2_2D.pt")
(ImpactDimension1 2)
(ImpactNumberOfChannels1 1)
(ImpactPatchSize1 0 0)
(ImpactVoxelSize1 0.1 0.1 0.4)
(ImpactLayersMask1 "1")
(ImpactSubsetFeatures1 32)
(ImpactPCA1 0)
(ImpactDistance1 "L1")
(ImpactLayersWeight1 1)

(ImpactModelsPath2 "MIND/R2D2_2D.pt")
(ImpactDimension2 2)
(ImpactNumberOfChannels2 1)
(ImpactPatchSize2 0 0)
(ImpactVoxelSize2 0.05 0.05 0.4)
(ImpactLayersMask2 "1")
(ImpactSubsetFeatures2 32)
(ImpactPCA2 0)
(ImpactDistance2 "L1")
(ImpactLayersWeight2 1)

(ImpactModelsPath3 "MIND/R2D2_2D.pt")
(ImpactDimension3 2)
(ImpactNumberOfChannels3 1)
(ImpactPatchSize3 0 0)
(ImpactVoxelSize3 0.025 0.025 0.4)
(ImpactLayersMask3 "1")
(ImpactSubsetFeatures3 32)
(ImpactPCA3 0)
(ImpactDistance3 "L1")
(ImpactLayersWeight3 1)

(ImpactUseMixedPrecision "false")
(ImpactFeaturesMapUpdateInterval -1)
(ImpactWriteFeatureMaps "false")
(ImpactMode "Static")
(ImpactGPU 0)


(Metric "Impact" "AdvancedMattesMutualInformation" "TransformBendingEnergyPenalty")
(Metric0Weight 1)
(Metric1Weight 1)
(Metric2Weight 0.1)

// imageTypes
(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")
(UseDirectionCosines "true")

// components
(Registration "MultiMetricMultiResolutionRegistration")
(BSplineTransformSplineOrder 3)
(UseCyclicTransform "false")

// transform
(AutomaticTransformInitialization "false")
(AutomaticTransformInitializationMethod "GeometricalCenter")
(AutomaticScalesEstimation "true")
(HowToCombineTransforms "Compose")


// optimizer
(Optimizer "AdaptiveStochasticGradientDescent")
(MaximumNumberOfSamplingAttempts 8)
(UseAdaptiveStepSizes "true")
(UseMultiThreadingForMetrics "true")
(ASGDParameterEstimationMethod "DisplacementDistribution")
//(MaximumStepLength 0.6602)
(SigmoidInitialTime 0.0)
(NoiseCompensation "true")
(NumberOfSamplesForExactGradient 4096)

// automatic
(AutomaticParameterEstimation "true")
//(SP_alpha 1)
//(SP_A 20.0)
//(SP a 400)
//(SigmoidMax 1.0)
//(SigmoidMin -0.8)
//(SigmoidScale 0.00000001)
//(NumberOfGradientMeasurements 10)
//(NumberOfJacobianMeasurements 1000)

(FixedKernelBSplineOrder 3)
(MovingKernelBSplineOrder 3)
(CheckNumberOfSamples "true")
(RequiredRatioOfValidSamples 0.05)
(UseRelativeWeights "false")


// several
(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
(ShowExactMetricValue "false")
(ErodeFixedMask "false")
(ErodeMovingMask "false")
(UseBinaryFormatForTransformationParameters "false")

// imageSampler
(Interpolator "BSplineInterpolator")
(ImageSampler "RandomCoordinate")
(NewSamplesEveryIteration "true")
(UseRandomSampleRegion "false")


// interpolator and resampler
(ResampleInterpolator "FinalBSplineInterpolator")
(FinalBSplineInterpolationOrder 3)
(BSplineInterpolationOrder 3)
(Resampler "DefaultResampler")
(WriteIterationInfo "false")
(WriteResultImage "false")
(DefaultPixelValue 0)
(ResultImageFormat "mha")

(ITKTransformOutputFileNameExtension "itk.txt")
(WriteITKCompositeTransform "true")
